PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = END
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  Routine p1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win0 = visual.Window(size=(1920, 1080), screen=0, fullscr=True)
        win0.checkTiming=False
        win1 = visual.Window(size=(1920, 1080), screen=1, fullscr=True)
        win1.checkTiming=False

        active_txt = visual.TextStim(win0, text='Close your eyes and press the space bar at the same time.\n' +
        'Count to 10  in your head, and then open your eyes release the spacebar')
        wait_txt = visual.TextStim(win1, text='The other player is about to close his eyes')
        polygon = visual.Polygon(win0, pos = (0.6, 0.6), size = 0.2)

        win0.flip()
        win1.flip()

        import random
        is_left = random.choice([False, True])
      Begin Routine:
        print('keyboard: ', hardware.keyboard.getKeyboards())

        wait_txt.setText('The other player is about to close his eyes')

        if is_left:
            active_txt.win = win0
            wait_txt.win = win1
            polygon.win = win0
        else:
            active_txt.win = win1
            wait_txt.win = win0
            polygon.win = win1

        wait_txt.setAutoDraw(True)
        active_txt.setAutoDraw(True)
        win0.flip()
        win1.flip()
        clicked = False
      Each Frame:
        if  not clicked and key_resp_2.keys == 'space':
            clicked = True
            polygon.setAutoDraw(True)
            wait_txt.setText('The other player closed his eyes')
            win0.flip()
            win1.flip()
      End Routine:
        active_txt.setAutoDraw(False)
        wait_txt.setAutoDraw(False)
        polygon.setAutoDraw(False)

        win0.flip()
        win1.flip()

        is_left = not is_left
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine begin
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        keyboard_label = "keyboard0"
      Begin Experiment:
        keyboard_label = "keyboard0"
      Begin Routine:
        keyboard_label = "keyboard0"
  Routine p2
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine p1
    Routine p2
  LoopTerminator trials
